run("Close All");
roiManager("reset");
run("Clear Results");

//Get Data
input = getDirectory("ARS");

// Get path to Save Data
  Quantification = getDirectory("DiameterSG");
  if (Quantification=="")
      exit("No temp directory available");
 //run("Select None");
 //run("Close All");
 

 // Create folders
 Results = Quantification + "Results" + File.separator;
 File.makeDirectory(Results);
 if (!File.exists(Results))
     exit("Unable to create directory");
 print("");
 print(Results);

 ROI = Quantification + "ROI" + File.separator;
 File.makeDirectory(ROI);
 if (!File.exists(ROI))
     exit("Unable to create directory");
 print("");
 print(ROI);

 Projections =  Quantification + "Projections" + File.separator;
 File.makeDirectory(Projections);
 if (!File.exists(Projections))
     exit("Unable to create directory");
 print("");
 print(Projections);

 
 SG =  Quantification + "SG" + File.separator;
 File.makeDirectory(SG);
 if (!File.exists(SG))
     exit("Unable to create directory");
 print("");
 print(Projections);

 processFolder(input);
 
// function to scan folders/subfolders/files to find files with correct suffix
function processFolder(input) {
	list = getFileList(input);
	list = Array.sort(list);
	for (i = 0; i < list.length; i++) {
		if(File.isDirectory(input + list[i]));
			processFolder("" + input + list[i]);
		if(endsWith(list[i], ".nd2"))
			processFile(input, Quantification, list[i]);
	}
}

function processFile(input, output, file) {
	// Do the processing here by adding your own code.
	// Leave the print statements until things work, then remove them.
    run("Bio-Formats Importer", "open=[" + input + list[i] + "] autoscale color_mode=Default view=Hyperstack stack_order=XYCZT");
	imageTitle = getTitle();
	roiManager("reset");
	run("Clear Results");
 	run("Select None");
 	
//Remove Extension
  selectWindow(imageTitle); 
  x = getTitle();
  x = replace(x, ".tif", "");        
  x = replace(x, ".tiff", "");      
  x = replace(x, ".lif", "");      
  x = replace(x, ".lsm", "");    
  x = replace(x, ".czi", "");      
  x = replace(x, ".nd2", "");
  title = x;

//Preliminary settings 
 run("Set Measurements...", "area mean redirect=None decimal=3");
 selectWindow(imageTitle); 
 run("Duplicate...", "duplicate channels=3");
 run("Grays");
 run("Z Project...", "projection=[Max Intensity]");
 saveAs("Tiff", Projections + "MAX_" + title);
 MAX = getTitle();

//SubtractBackgroung
selectWindow(MAX); 
run("Duplicate...", " ");
run("Subtract Background...", "rolling=1000 create");
run("Measure");
close();
selectWindow(MAX); 
BG=getResult("Mean");
run("Subtract...", "value=BG stack");
run("Subtract Background...", "rolling=100");
run("Clear Results");
setAutoThreshold("MaxEntropy dark");
setOption("BlackBackground", false);
run("Convert to Mask");
run("Set Measurements...", "area perimeter shape redirect=None decimal=3");
run("Analyze Particles...", "size=0.10-Infinity circularity=0.10-1.00 display exclude add");
saveAs("Tiff", SG + "Mask " + title);
saveAs("Results", Results + "MAX_ " + title + ".csv");
close();
roiManager("Save", ROI + title + ".zip");

run("Close All");
roiManager("reset");
run("Clear Results");
}
